CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>.*)-(?P<Row>[A-H]) - (?P<Col>[0-9]{2}).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "YAP")
    Name to assign these images:YAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "SUM")
    Name to assign these images:Cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "FITC")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Col

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:(0.0, 1.0)
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:(0.0, 1.0)
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:9|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
    Hidden:3
    Select an image to measure:Actin
    Select an image to measure:DNA
    Select an image to measure:YAP
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

CalculateMath:[module_num:10|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
    Name the output measurement:nucYAP_cytYAP
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_YAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cytoplasm
    Select the denominator measurement:Intensity_MeanIntensity_YAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:11|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
    Name the output measurement:nucYAP_cellYAP
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_YAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_YAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:12|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
    Name the output measurement:nucYAP_nucDAPI
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_YAP
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:Intensity_MeanIntensity_DNA
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Parent_Cells,Cytoplasm|Parent_Nuclei,Cytoplasm|Number_Object_Number,Cytoplasm|Intensity_MassDisplacement_DNA,Cytoplasm|Intensity_MassDisplacement_YAP,Cytoplasm|Intensity_MassDisplacement_Actin,Cytoplasm|Intensity_MinIntensity_DNA,Cytoplasm|Intensity_MinIntensity_Actin,Cytoplasm|Intensity_MinIntensity_YAP,Cytoplasm|Intensity_StdIntensity_DNA,Cytoplasm|Intensity_StdIntensity_YAP,Cytoplasm|Intensity_StdIntensity_Actin,Cytoplasm|Intensity_IntegratedIntensityEdge_DNA,Cytoplasm|Intensity_IntegratedIntensityEdge_Actin,Cytoplasm|Intensity_IntegratedIntensityEdge_YAP,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:TKI_100nM_YAP_
    Overwrite existing files without warning?:No
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