CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>.*)-(?P<Row>[A-H]) - (?P<Col>[0-9]{2}).*
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "CYTO")
    Name to assign these images:CYTO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "BPAX")
    Name to assign these images:PAX
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "ACTN4")
    Name to assign these images:ACTN4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "ACTIN")
    Name to assign these images:ACTIN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "RIDGES")
    Name to assign these images:FIBERS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CYTO
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Threshold:[module_num:7|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
    Select the input image:PAX
    Name the output image:Bpax_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Bpax_thresh
    Name the primary objects to be identified:FA
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
Threshold:[module_num:9|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
    Select the input image:FIBERS
    Name the output image:Fibers_thresh
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Fibers_thresh
    Name the primary objects to be identified:Fibers
    Typical diameter of objects, in pixel units (Min,Max):5,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
RelateObjects:[module_num:11|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
    Parent objects:Cells
    Child objects:FA
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:12|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
    Parent objects:Cells
    Child objects:Fibers
    Name the output object:RelateObjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:2
    Select an image to measure:ACTIN
    Select an image to measure:ACTN4
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:FA
    Select objects to measure:Fibers

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Cells
    Select objects to measure:FA
    Select objects to measure:Nuclei
    Select objects to measure:Fibers
    Calculate the Zernike features?:No

MeasureColocalization:[module_num:15|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
    Hidden:2
    Hidden:3
    Select an image to measure:ACTIN
    Select an image to measure:ACTN4
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells
    Select an object to measure:FA
    Select an object to measure:Fibers

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt2_fibers_
    Overwrite existing files without warning?:No
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